PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = AliceBlue
  expName = scale_training
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Routines
  Routine like
    SliderComponent like_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Most disliked sensation imaginable','Dislike extremely','Dislike very much','Dislike moderately','Dislike slightly','Neutral','Like slightly','Like moderately','Like very much','Like extremely','Most liked sensation imaginable'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = -100, -62.89, -41.58, -17.59, -5.92, 0, 6.25, 17.82, 44.43, 65.72, 100
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    TextComponent like_trials
      color = MidnightBlue
      letterHeight = 40
      pos = (-300, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LHS
      wrapWidth = 1000
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    TextComponent lhs_instructions
      color = Black
      letterHeight = 35
      pos = (-600, 300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Rate how much you like:
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    CodeComponent like_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        like_slider.marker.size=(2,.1);
        like_slider.marker.color='Red';

        mouse.setPos((0,0))
        like_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        like_slider.markerPos=(x)

        if mouse.getPressed()[0]:
            LHS_trials.addData('Like', like_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
  Routine intense_imagined
    SliderComponent intense_slider_imagined
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'No sensation','Barely detectable', 'Weak', 'Moderate', 'Strong', 'Very strong', 'Strongest imaginable sensation of any kind'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ('slider',)
      ticks = 0, 1.4,6,17,35,51,100
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    TextComponent rating_item
      color = MidnightBlue
      letterHeight = 40
      pos = (-300, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $gLMS_imagined
      wrapWidth = 1000
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    TextComponent rate_instructions
      color = Black
      letterHeight = 40
      pos = (-600, 300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Rate the intensity of:
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    CodeComponent intense_code_imagined
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        intense_slider_imagined.marker.size=(2,.1);
        intense_slider_imagined.marker.color='Red';

        #mouse.setPos((0,-500))
        mouse.setPos((0,0))
        intense_slider_imagined.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        intense_slider_imagined.markerPos=((x) / 3)

        if mouse.getPressed()[0]:
            gLMS_imagined_trials.addData('Intense_Imagined', intense_slider_imagined.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
  Routine intense_instr
    SliderComponent intense_slider_instr
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'No sensation','Barely detectable', 'Weak', 'Moderate', 'Strong', 'Very strong', 'Strongest imaginable sensation of any kind'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0, 1.4,6,17,35,51,100
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    TextComponent rating_instr1
      color = MidnightBlue
      letterHeight = 40
      pos = (-300, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Intensity scale instructions
      wrapWidth = 1000
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    CodeComponent intense_code_instr
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        intense_slider_instr.marker.size=(2,.1);
        intense_slider_instr.marker.color='Red';

        mouse.setPos((0,0))
        intense_slider_instr.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        intense_slider_instr.markerPos=((x) / 5)

        if mouse.getPressed()[0]:
            continueRoutine = False
      End Routine:
        core.wait(0.5)
  Routine like_instr
    SliderComponent like_slider_instr
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Most disliked sensation imaginable','Dislike extremely','Dislike very much','Dislike moderately','Dislike slightly','Neutral','Like slightly','Like moderately','Like very much','Like extremely','Most liked sensation imaginable'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = -100, -62.89, -41.58, -17.59, -5.92, 0, 6.25, 17.82, 44.43, 65.72, 100
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    TextComponent lhs_instr
      color = MidnightBlue
      letterHeight = 40
      pos = (-300, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Liking scale instructions
      wrapWidth = 1000
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    CodeComponent like_code_instr
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        like_slider_instr.marker.size=(2,.1);
        like_slider_instr.marker.color='Red';

        mouse.setPos((0,0))
        like_slider_instr.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        like_slider_instr.markerPos=(x)

        if mouse.getPressed()[0]:
            continueRoutine = False
      End Routine:
        core.wait(0.5)
  Routine end
    TextComponent text_2
      color = black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the training :)
      wrapWidth = 1000
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  Routine intense_real
    SliderComponent intense_slider_real
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'No sensation','Barely detectable', 'Weak', 'Moderate', 'Strong', 'Very strong', 'Strongest imaginable sensation of any kind'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0, 1.4,6,17,35,51,100
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    TextComponent rating_item_2
      color = MidnightBlue
      letterHeight = 40
      pos = (-300, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $gLMS_real
      wrapWidth = 1000
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    TextComponent rate_instrutions_2
      color = Black
      letterHeight = 35
      pos = (-600, 300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Rate the intensity of:
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    CodeComponent intense_code_real
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        intense_slider_real.marker.size=(2,.1);
        intense_slider_real.marker.color='Red';

        mouse.setPos((0,-500))
        intense_slider_real.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        intense_slider_real.markerPos=500 + (x)

        if mouse.getPressed()[0]:
            gLMS_real_trials.addData('Intense_real', intense_slider_real.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
  Routine pause
    TextComponent pause_exp
      color = black
      letterHeight = 50
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pause for instructions
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intense_taste
    SliderComponent intense_slider_taste
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'No sensation','Barely detectable', 'Weak', 'Moderate', 'Strong', 'Very strong', 'Strongest imaginable sensation of any kind'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0, 1.4,6,17,35,51,100
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    TextComponent rating_item_3
      color = MidnightBlue
      letterHeight = 40
      pos = (-300, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $gLMS_tastes
      wrapWidth = 1000
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    CodeComponent intense_code_taste
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        intense_slider_taste.marker.size=(2,.1);
        intense_slider_taste.marker.color='Red';

        mouse.setPos((0,-500))
        intense_slider_taste.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        intense_slider_taste.markerPos=500 + (x)

        if mouse.getPressed()[0]:
            gLMS_taste_trials.addData('Intense_taste', intense_slider_taste.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
    TextComponent rate_instrutions_3
      color = Black
      letterHeight = 35
      pos = (-600, 300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Rate the intensity of:
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    TextComponent whichcup
      color = Black
      letterHeight = 50
      pos = (-400, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialno
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Flow
  Routine intense_instr
  LoopInitiator gLMS_imagined_trials loopType="TrialHandler"
    conditionsFile = gLMS_imagined_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('gLMS_imagined', 'The sweetness of cotton candy')]),
      OrderedDict([('gLMS_imagined', 'The coldness of a soda can taken from the fridge')]),
      OrderedDict([('gLMS_imagined', 'The pain from slamming a car door on your finger')]),
      OrderedDict([('gLMS_imagined', 'The warmth of summer sun on your face')]),
      OrderedDict([('gLMS_imagined', 'The pain from stubbing your toe')]),
      OrderedDict([('gLMS_imagined', 'The sourness from biting a lemon')]),
      OrderedDict([('gLMS_imagined', 'The bitterness of celery')]),
      OrderedDict([('gLMS_imagined', 'The coolness of peppermint candy')]),
      OrderedDict([('gLMS_imagined', 'The heat of a hot bath')]),
      OrderedDict([('gLMS_imagined', 'The warmth of a cat on your lap')]),
      OrderedDict([('gLMS_imagined', 'The burnining sensation from eating a whole hot pepper')]),
      OrderedDict([('gLMS_imagined', 'The sweetness of a banana')]),
      OrderedDict([('gLMS_imagined', 'The tinging from a carbonated drink')]),
      OrderedDict([('gLMS_imagined', 'The touch of a finger on your arm')]),
      OrderedDict([('gLMS_imagined', 'The itch of a mosquito bite')]),
      OrderedDict([('gLMS_imagined', 'The saltiness of ocean water')]),
      OrderedDict([('gLMS_imagined', 'The pressure of a firm handshake')]),
      OrderedDict([('gLMS_imagined', 'The heat of sipping freshly brewed tea')]),
      OrderedDict([('gLMS_imagined', 'The bitterness of black coffee')]),
      OrderedDict([('gLMS_imagined', 'The feel of a feather in your hand')])]
    Routine intense_imagined
  LoopTerminator gLMS_imagined_trials
  Routine pause
  LoopInitiator gLMS_real_trials loopType="TrialHandler"
    conditionsFile = gLMS_real_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('gLMS_real', 'Cold')]),
      OrderedDict([('gLMS_real', 'Touch')]),
      OrderedDict([('gLMS_real', 'Pressure (ignore cold)')]),
      OrderedDict([('gLMS_real', 'Pressure (ignore cold)')]),
      OrderedDict([('gLMS_real', 'Odor')]),
      OrderedDict([('gLMS_real', 'Bitter taste')]),
      OrderedDict([('gLMS_real', 'Odor')]),
      OrderedDict([('gLMS_real', 'Sweet taste')]),
      OrderedDict([('gLMS_real', 'Brightness')])]
    Routine intense_real
  LoopTerminator gLMS_real_trials
  Routine pause
  LoopInitiator gLMS_taste_trials loopType="TrialHandler"
    conditionsFile = gLMS_tastes_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('gLMS_tastes', 'Sweet'), ('trialno', 1)]),
      OrderedDict([('gLMS_tastes', 'Salty'), ('trialno', 2)]),
      OrderedDict([('gLMS_tastes', 'Sour'), ('trialno', 3)]),
      OrderedDict([('gLMS_tastes', 'Bitter'), ('trialno', 4)])]
    Routine intense_taste
  LoopTerminator gLMS_taste_trials
  Routine like_instr
  LoopInitiator LHS_trials loopType="TrialHandler"
    conditionsFile = LHS.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('LHS', 1)]),
      OrderedDict([('LHS', 2)]),
      OrderedDict([('LHS', 3)]),
      OrderedDict([('LHS', 4)]),
      OrderedDict([('LHS', 5)]),
      OrderedDict([('LHS', 6)]),
      OrderedDict([('LHS', 7)]),
      OrderedDict([('LHS', 8)]),
      OrderedDict([('LHS', 9)]),
      OrderedDict([('LHS', 10)]),
      OrderedDict([('LHS', 11)]),
      OrderedDict([('LHS', 12)]),
      OrderedDict([('LHS', 13)]),
      OrderedDict([('LHS', 14)]),
      OrderedDict([('LHS', 15)])]
    Routine like
  LoopTerminator LHS_trials
  Routine end
